PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = fMRI_Stimuli_K_Study_Draft
  keyboardBackend = PsychToolbox
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Routines
  Routine Thoughts_R1
    TextComponent Thought_R1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Thought
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  Routine Run_1
  Routine Disengage_2_R1
    TextComponent Cue_2_R1
      letterHeight = 0.1
      startVal [time (s)] = 44
      stopVal [duration (s)] = 0.25
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      text:
        Any text

        including line breaks
    ImageComponent Fixation_2_R1
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 44.25
      stopVal [duration (s)] = 1.75
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  Routine Thoughts_R2
    TextComponent Thought_R2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 34
      text [set every repeat] = $Thought
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  Routine Disengage
    TextComponent D_Cue
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.25
      text [set every repeat] = $stimulus
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    PolygonComponent D_Fixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = .25
      stopVal [duration (s)] = 1.75
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    KeyboardComponent D_Response
      allowedKeys = None,'2'
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = .25
      stopVal [duration (s)] = 1.75
      store = first key
      storeCorrect = True
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  Routine Reflection
    TextComponent Reflect
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Notice thoughts
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  Routine Probe_1
    TextComponent Probe_1_Q1
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = To what extent were your thoughts were repetitive, intrusive, or hard to control?
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    RatingScaleComponent P1_Response_1
      forceEndRoutine = True
      high = 100
      labels = not at all, extremely
      low = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    TextComponent Probe_1_Q2
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
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      text:
        To what extent were your thoughts focused on the task?
    RatingScaleComponent P1_Response_2
      forceEndRoutine = True
      high = 100
      labels = not at all, extremely
      low = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
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    TextComponent Probe_1_Q3
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
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      text:
        To what extent were you trying (making an effort) to focus on the task?
    RatingScaleComponent P1_Response_3
      forceEndRoutine = True
      high = 100
      labels = not at all, extremely
      low = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
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  Routine Probe_2
    TextComponent Probe_2_Q1
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = To what extent did you feel afraid, scared, or frightened?
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    RatingScaleComponent P2_Response_1
      forceEndRoutine = True
      high = 100
      labels = not at all, extremely
      low = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
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    TextComponent Probe_2_Q2
      letterHeight = 0.1
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
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      text:
        To what extent did you feel sad, blue, or downhearted?
    RatingScaleComponent P2_Response_2
      forceEndRoutine = True
      high = 100
      labels = not at all, extremely
      low = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 6
      stopVal [duration (s)] = 6
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    TextComponent Probe_2_Q3
      letterHeight = 0.1
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
      text = To what extent did you feel:
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    RatingScaleComponent P2_Response_3
      forceEndRoutine = True
      high = 100
      labels = not at all, extremely
      low = 0
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 12
      stopVal [duration (s)] = 6
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  Routine Fixation
    PolygonComponent Fixation_P
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    CodeComponent SliderReset
      Code Type = Auto->JS
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      Begin Routine:
        sliderTimerStarted = False
        slidersTimedOut = False
  Routine ThoughtProbes
    SliderComponent slider
      forceEndRoutine = False
      granularity = 5
      initVal = 50
      letterHeight = 0.05
      pos = (0, -.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (range(0,101,5))
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    CodeComponent sliderCode
      Code Type = Py
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      Begin Experiment:
        # These are the initial values to be used later to control
        # the countdown for total time allowed for each round of 6 thought probes
        sliderTimerStarted = False
        slidersTimedOut = False
      Begin Routine:
        # This piece of code starts a countdown for the total duration of
        # each round of 6 thought probes
        if not sliderTimerStarted:
            sliderTimer = core.Clock()
            sliderTimer.addTime(-24)    # set the value in addTime() to the negative value of each loop's total time limit
            sliderTimerStarted = True
            slidersTimedOut = False

        # This piece of code reinitializes the slider
        # object on each run through the routine in
        # order to allow resetting of the labels
        slider = visual.Slider(win=slider.win, name=slider.name,
            startValue=slider.startValue, size=slider.size, pos=slider.pos, units=slider.units,
            labels=[leftanchor, rightanchor], ticks=slider.ticks, granularity=slider.granularity,
            style=slider.style, styleTweaks=slider.styleTweaks, opacity=slider.opacity,
            labelColor='LightGray', markerColor='Red', lineColor='White', colorSpace='rgb',
            font=slider.font, labelHeight=slider.labelHeight,
            flip=slider.flip, ori=slider.ori, depth=slider.depth, readOnly=slider.readOnly)

        slider.marker.size = (0.05, 0.05) # Adjust marker size to fit better on small tick spaces

        # Clear the buffer of any prior keypresses
        event.clearEvents(eventType='keyboard')
      Each Frame:
        # This piece of code allows the slider to detect keyboard input
        keys = event.getKeys()

        if keys:
            if '2' in keys:                      # This piece determines the keys that move the marker left
                slider.markerPos -= slider.granularity
            elif '3' in keys:                   # This piece determines the keys that move the marker right
                slider.markerPos += slider.granularity
            elif '1' in keys: # once space is pressed, that rating is set to markerPos and the trial terminates
                slider.recordRating(slider.markerPos)
                continueRoutine = False

        # This piece of code checks whether the countdown has expired (the clock has reached zero) and if so ends the routine
        if sliderTimer.getTime() >= 0:
            continueRoutine = False
            slidersTimedOut = True
            SliderLoop.finished = True
            sliderTimerStarted = False
      End Routine:
        SliderLoop.addData('slidersTimedOut',slidersTimedOut)
    TextComponent sliderText
      letterHeight = 0.05
      startVal [time (s)] = 0
      text [set every repeat] = $probetext
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    TextComponent showPos
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0
      text [set every frame] = $slider.getMarkerPos()
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  Routine ThoughtProbes2
    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 5
      initVal = 50
      letterHeight = 0.05
      pos = (0, -.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (range(0,101,5))
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    CodeComponent sliderCode_2
      Code Type = Py
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      Begin Experiment:
        # These are the initial values to be used later to control
        # the countdown for total time allowed for each round of 6 thought probes
        sliderTimerStarted = False
        slidersTimedOut = False
      Begin Routine:
        # This piece of code starts a countdown for the total duration of
        # each round of 6 thought probes
        if not sliderTimerStarted:
            sliderTimer = core.Clock()
            sliderTimer.addTime(-18)    # set the value in addTime() to the negative value of each loop's total time limit
            sliderTimerStarted = True
            slidersTimedOut = False

        # This piece of code reinitializes the slider
        # object on each run through the routine in
        # order to allow resetting of the labels

        slider = visual.Slider(win=slider.win, name=slider.name,
            startValue=slider.startValue, size=slider.size, pos=slider.pos, units=slider.units,
            labels=[leftanchor, rightanchor], ticks=slider.ticks, granularity=slider.granularity,
            style=slider.style, styleTweaks=slider.styleTweaks, opacity=slider.opacity,
            labelColor='LightGray', markerColor='Red', lineColor='White', colorSpace='rgb',
            font=slider.font, labelHeight=slider.labelHeight,
            flip=slider.flip, ori=slider.ori, depth=slider.depth, readOnly=slider.readOnly)

        slider.marker.size = (0.05, 0.05) # Adjust marker size to fit better on small tick spaces
      Each Frame:
        # This piece of code allows the slider to accept keyboard input
        keys = event.getKeys()

        if keys:
            if 'left' in keys:                      # This piece determines the keys that move the marker left
                slider.markerPos -= slider.granularity
            elif 'right' in keys:                   # This piece determines the keys that move the marker right
                slider.markerPos += slider.granularity
            elif 'space' in keys: # once space is pressed, that rating is set to markerPos and the trial terminates
                slider.recordRating(slider.markerPos)
                continueRoutine = False

        # This piece of code checks whether the countdown has expired (the clock has reached zero) and if so ends the routine
        if sliderTimer.getTime() >= 0:
            continueRoutine = False
            slidersTimedOut = True
            SliderLoop1.finished = True
            sliderTimerStarted = False
      End Routine:
        SliderLoop1.addData('slidersTimedOut',slidersTimedOut)
    TextComponent sliderText_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $probetext
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    TextComponent showPos_2
      letterHeight = 0.05
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $slider.getMarkerPos()
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  Routine DispThought
    TextComponent ThoughtText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 34
      text [set every repeat] = $Thought
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  Routine ProbesPause
    PolygonComponent Fixation_earlyfinish
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    CodeComponent pause_code
      Code Type = Auto->JS
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      Each Frame:
        # This code makes a fixation cross display for
        # the remaining duration of the 18 second probe time
        # and skips the cross if the probes timed out
        if sliderTimer.getTime() < 0:
            continueRoutine = True
        else:
            continueRoutine = False
  Routine waitForTrigger
    KeyboardComponent triggerCheck
      allowedKeys [set every repeat] = 't','equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent displayWaiting
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Awaiting start signal from scanner...
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Flow
  LoopInitiator RunBlocks loopType="TrialHandler"
    conditionsFile = Runs.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('RunNumber', 1)]),
      OrderedDict([('RunNumber', 2)]),
      OrderedDict([('RunNumber', 3)])]
    Routine waitForTrigger
    LoopInitiator TrialBlocks loopType="TrialHandler"
      conditionsFile = $"ThoughtStimuli_subject"+expInfo['participant']+"_run"+str(RunNumber)+".csv"
      loopType = sequential
      nReps = 1
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      Routine DispThought
      LoopInitiator DisengageLoop loopType="TrialHandler"
        conditionsFile = $"SART_subject"+expInfo['participant']+"_run"+str(RunNumber)+"_thought"+str(ThoughtNumber)+".csv"
        loopType = sequential
        nReps = 1
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        Routine Disengage
      LoopTerminator DisengageLoop
      Routine Reflection
      LoopInitiator SliderLoop loopType="TrialHandler"
        conditionsFile = ProbeQuestions.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('probenumber', 1), ('probetext', 'To what extent were your thoughts repetitive, intrusive, or hard to control?'), ('leftanchor', 'not at all'), ('rightanchor', 'extremely')]),
          OrderedDict([('probenumber', 2), ('probetext', 'To what extent were your thoughts focused on the task?'), ('leftanchor', 'not at all'), ('rightanchor', 'extremely')]),
          OrderedDict([('probenumber', 3), ('probetext', 'To what extent were you trying (making an effort) to focus on the task?'), ('leftanchor', 'not at all'), ('rightanchor', 'extremely')]),
          OrderedDict([('probenumber', 4), ('probetext', 'To what extent did you feel afraid, scared, or frightened?'), ('leftanchor', 'not at all'), ('rightanchor', 'extremely')]),
          OrderedDict([('probenumber', 5), ('probetext', 'To what extent did you feel sad, blue, or downhearted?'), ('leftanchor', 'not at all'), ('rightanchor', 'extremely')]),
          OrderedDict([('probenumber', 6), ('probetext', 'To what extent did you feel:'), ('leftanchor', 'sleepy'), ('rightanchor', 'lively')])]
        Routine ThoughtProbes
      LoopTerminator SliderLoop
      Routine ProbesPause
      Routine Fixation
    LoopTerminator TrialBlocks
  LoopTerminator RunBlocks
